PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = white
  expName = BTY2
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Routines
  Routine items_presentation
    ImageComponent stimuli
      image [set every repeat] = $presentation
      saveStartStop = False
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      texture resolution = 512
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  Routine test_reco
    ImageComponent reco
      image [set every repeat] = $test_learning
      saveStartStop = False
      size = (0.4, 0.8)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $answer_1
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine feedback_1
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        key_resp.corr=0
        msgone=""
      Begin Routine:
        if key_resp.corr==1:
            msgone="Correct!"
        else:
            msgone="Oops! That was wrong"
  Routine encouragement
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        trial_a=0
        msgone=""
        msgtwo=""
        msgthree=""
        msgfour=""
      Begin Routine:
        trial_a=trial_a+1

        if trial_a==18:
            msgone="Not to bad...but not enough, please try again !"

        if trial_a!=18:
            msgone=""

        if trial_a==54:
            msgtwo="You're getting better, but your accuracy is still not high enough hang in there !"

        if trial_a!=54:
            msgtwo=""

        if trial_a==108:
            msgthree="I promise, you're not stucked into an infinite loop (^_^)"

        if trial_a!=108:
            msgthree=""

        if trial_a==162:
            msgfour="Almost done !"

        if trial_a!=162:
            msgfour=""
  Routine fixation_cross
    PolygonComponent cross
      fillColor = lightblue
      lineColor = lightblue
      lineWidth = 0.5
      saveStartStop = False
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine next_step
    TextComponent transition
      color = red
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Get ready for the next step!
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  Routine Tache_3_instructions
    TextComponent instruction_sound
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you will have to associate each item with the correct sound. Press respectively [up] or [down] arrow if you think that the item at the top or at the bottom is associated with the sound displayed.
        After each answer, you will be assessed on how confident you are with your answer (please give a sincere self-assessment).
        You will receive a feedback. Depending on your accuracy you may be expected to repeat the task. Good luck !

        [Press spacebar to continue]
    KeyboardComponent skip_sound
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_sound
    ImageComponent reco_sound
      image [set every repeat] = $sound_learning
      saveStartStop = False
      size = (0.4, 0.8)
      startVal [time (s)] = 0.0
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    SoundComponent sound2s_reco
      saveStartStop = False
      sound [set every repeat] = $son_reco
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'up','down'
      correctAns = $answer_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine JOK_2
    TextComponent instr_2
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How confident are you with your answer? Press [left] for "YES" and [right ] for "NO".

        YES <-          ->NO
    KeyboardComponent JOKrep2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taux_réussite_et_feedback_2
    CodeComponent code_sound
      Code Type = Auto->JS
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      Begin Experiment:
        ac=0
        tr=0
        key_resp_2.corr=0
        b=0
        message_11=""
        message_21=""
      Begin Routine:
        tr=tr+1
        ac=b/tr



        if key_resp_2.corr ==1:
            b=b+1
            message_11="Correct"
            message_21=""
        else:
            b=b+0
            message_21="Oops! That was wrong"
            message_11=""


        if tr==6 and ac>=0.8:
            trials.finished=True
            skipThisTrial = True
            continueRoutine = False

        if tr ==6 and ac<0.8:
            b = 0
            tr = 0
            ac=0
    TextComponent text
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message_11
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    TextComponent text_4
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message_21
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  Routine test_premice
    ImageComponent premice
      image [set every repeat] = $premice_pairs
      saveStartStop = False
      size = (0.4, 0.8)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent tete
      image [set every repeat] = $smiley
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys = 'up','down'
      correctAns = $answer_3
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine JOK_3
    TextComponent instr_3
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How confident are you with your answer? Press [left] for "YES" and [right ] for "NO".

        YES <-          ->NO
    KeyboardComponent JOKrep3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Taux_réussite_et_feedback_3
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        accuracy=0
        trialNumber=0
        key_resp_3.corr=0
        c=0
        message_98=""
        message_99=""
      Begin Routine:
        trialNumber=trialNumber+1
        accuracy=c/trialNumber



        if key_resp_3.corr ==1:
            c=c+1
            message_98="Correct"
            message_99=""

        else:
            c=c+0
            message_99="Oops! That was wrong"
            message_98=""

        if trialNumber==10 and accuracy>=0.80:
            boucle_4.finished=True
            skipThisTrial = True
            continueRoutine = False

        if trialNumber ==10 and accuracy<0.80:
            c = 0
            trialNumber = 0
            accuracy=0
    TextComponent text_6
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message_98
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    TextComponent text_7
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message_99
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  Routine Fin_session_1
    TextComponent text_5
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of session 1!

        See you tomorrow for session 2, which will take less time than this one.

        Rest well, and don’t forget to put your eyemask on. :)

        (Press [spacebar] to finish)
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Tache_5_instructions
    TextComponent instr_premice
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the final part of session 1.

        This part is identical to the previous one. You have to correctly indicate which item is hiding a smiley face behind it. This time, however, you will receive no feedback.

        [Press spacebar to continue]
    KeyboardComponent skip_last_task
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_last_prem
    ImageComponent prem
      image [set every repeat] = $prem_pair_nf
      saveStartStop = False
      size = (0.4, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'up','down'
      correctAns = $answer_4
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine JOK_4
    TextComponent instr_4
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        How confident are you with your answer? Press [left] for "YES" and [right ] for "NO".

        YES <-          ->NO
    KeyboardComponent JOKrep4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taux_réussite_et_feedback_4
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        accuracys1=0
        trialNumbers1=0
        key_resp_5.corrs1=0
        cs1=0
      Begin Routine:
        trialNumbers1=trialNumbers1+1
        accuracys1=cs1/trialNumbers1



        if key_resp_5.corr ==1:
            cs1=cs1+1

        else:
            cs1=cs1+0

        if trialNumbers1==10 and accuracys1>=0.80:
            boucle_5.finished=True
            skipThisTrial = True
            continueRoutine = False

        if trialNumbers1 ==10 and accuracys1<0.80:
            cs1 = 0
            trialNumbers1 = 0
            accuracys1=0
  Routine Introduction
    TextComponent texte_bienvenue
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the first session in the experiment!

        This experiment is made up of 4 sessions (2 in the evening, and 2 in the following mornings).

        Remember you can always withdraw from the experiment at any time without giving any reason. To do so, press the [Esc] key. You will only receive the credits you’ve accrued.

        [Press spacebar to continue]
    KeyboardComponent skip_bienvenue
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Task_1_Instructions
    TextComponent instruction_stimuli
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, a series of pictures will be displayed.

        All you have to do is remember the objects being presented.

        [Press spacebar to continue]
    KeyboardComponent skip_presentation
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Task_2_instructions
    TextComponent instruction_reco
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This part is a rocognition task.

        The items you saw in the last part will be presented with a distractor. Press [up] or [down] on your keyboard to select the item you think was shown previously.

        You will receive feedback after each trial.

        [Press spacebar to continue]
    KeyboardComponent skip_reco
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine accuracy_and_feedback_1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        acc=0
        trial=0
        key_resp.corr=0
        a=0
        message_1=""
        message_2=""
      Begin Routine:
        trial=trial+1
        acc=a/trial



        if key_resp.corr==1:
            a=a+1
            message_1="Correct"
            message_2=""
        else:
            a=a+0
            message_2="Oops! That was wrong"
            message_1=""


        if trial==6 and acc>=0.8:
            boucle_2.finished=True
            skipThisTrial = True
            continueRoutine = False

        if trial ==6 and acc<0.8:
            a = 0
            trial = 0
            acc=0
    TextComponent text_2
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message_1
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    TextComponent text_3
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message_2
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  Routine Task_4_Instructions
    TextComponent instruction_premice
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see two of the items at a time.

        Your job is to decide which one of the two items is covering a smiley face.

        If you think the top or bottom item is covering the smiley face, press the [up] or [down] button respectively.

        You will receive feedback, so try to remember which item is covering the smiley in each pair.

        At first, the task will seem very difficult, but over trials it will become easier.

        [Press spacebar to continue]
    KeyboardComponent skip_premice
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  Routine Task_1_Instructions
  LoopInitiator loop loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = 3-Variables.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [OrderedDict([('presentation', 'o1.jpg'), ('test_learning', 'pt1.jpg'), ('answer_1', 'up'), ('premice_pairs', 'o6o2.jpg'), ('answer_3', 'up'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o6o2.jpg'), ('answer_4', 'up'), ('inference_pairs', 'o3o6v.jpg'), ('answer_5', 'down'), ('lastSmiley', 'right.jpg')]),
      OrderedDict([('presentation', 'o2.jpg'), ('test_learning', 'pt3.jpg'), ('answer_1', 'up'), ('premice_pairs', 'o3o6.jpg'), ('answer_3', 'up'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o1o5v.jpg'), ('answer_4', 'down'), ('inference_pairs', 'o2o5v.jpg'), ('answer_5', 'down'), ('lastSmiley', 'right.jpg')]),
      OrderedDict([('presentation', 'o3.jpg'), ('test_learning', 'pt4.jpg'), ('answer_1', 'up'), ('premice_pairs', 'o2o4v.jpg'), ('answer_3', 'down'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o6o2v.jpg'), ('answer_4', 'down'), ('inference_pairs', 'o3o4.jpg'), ('answer_5', 'up'), ('lastSmiley', 'right.jpg')]),
      OrderedDict([('presentation', 'o4.jpg'), ('test_learning', 'pt6.jpg'), ('answer_1', 'down'), ('premice_pairs', 'o3o6v.jpg'), ('answer_3', 'down'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o4o1v.jpg'), ('answer_4', 'down'), ('inference_pairs', 'o6o1.jpg'), ('answer_5', 'up'), ('lastSmiley', 'right.jpg')])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
    Routine fixation_cross
    Routine items_presentation
  LoopTerminator loop
  Routine next_step
  Routine Task_2_instructions
  LoopInitiator boucle_2 loopType="TrialHandler"
    Selected rows = 0:60
    conditionsFile = 3-Variables.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('presentation', 'o1.jpg'), ('test_learning', 'pt1.jpg'), ('answer_1', 'up'), ('premice_pairs', 'o6o2.jpg'), ('answer_3', 'up'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o6o2.jpg'), ('answer_4', 'up'), ('inference_pairs', 'o3o6v.jpg'), ('answer_5', 'down'), ('lastSmiley', 'right.jpg')]),
      OrderedDict([('presentation', 'o2.jpg'), ('test_learning', 'pt3.jpg'), ('answer_1', 'up'), ('premice_pairs', 'o3o6.jpg'), ('answer_3', 'up'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o1o5v.jpg'), ('answer_4', 'down'), ('inference_pairs', 'o2o5v.jpg'), ('answer_5', 'down'), ('lastSmiley', 'right.jpg')]),
      OrderedDict([('presentation', 'o3.jpg'), ('test_learning', 'pt4.jpg'), ('answer_1', 'up'), ('premice_pairs', 'o2o4v.jpg'), ('answer_3', 'down'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o6o2v.jpg'), ('answer_4', 'down'), ('inference_pairs', 'o3o4.jpg'), ('answer_5', 'up'), ('lastSmiley', 'right.jpg')]),
      OrderedDict([('presentation', 'o4.jpg'), ('test_learning', 'pt6.jpg'), ('answer_1', 'down'), ('premice_pairs', 'o3o6v.jpg'), ('answer_3', 'down'), ('smiley', 'right.jpg'), ('prem_pair_nf', 'o4o1v.jpg'), ('answer_4', 'down'), ('inference_pairs', 'o6o1.jpg'), ('answer_5', 'up'), ('lastSmiley', 'right.jpg')])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
    Routine fixation_cross
    Routine test_reco
    Routine accuracy_and_feedback_1
  LoopTerminator boucle_2
  Routine next_step
  Routine Task_4_Instructions
  LoopInitiator boucle_4 loopType="TrialHandler"
    Selected rows = 0:100
    conditionsFile = 3-Variables.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fixation_cross
    Routine test_premice
    Routine Taux_réussite_et_feedback_3
  LoopTerminator boucle_4
  Routine next_step
  Routine Tache_5_instructions
  LoopInitiator boucle_5 loopType="TrialHandler"
    Selected rows = 0:100
    conditionsFile = 3-Variables.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine fixation_cross
    Routine test_last_prem
    Routine taux_réussite_et_feedback_4
  LoopTerminator boucle_5
  Routine Fin_session_1
